CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_Apoptosis_(?P<Plate>[0-9]{1})$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Illum(?P<Channel>.*)_(?P<Method>.*).npy
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "npy")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'caspase3prob': u'Plate', u'DNA': u'Plate', u'DAPIprob': u'Plate', u'Brightfieldprob': u'Plate', u'EDU': u'Plate', u'Brightfield': u'Plate', u'IllumDNA': u'Plate', u'caspase3': u'Plate'}, {u'caspase3prob': u'Well', u'DNA': u'Well', u'DAPIprob': u'Well', u'Brightfieldprob': u'Well', u'EDU': u'Well', u'Brightfield': u'Well', u'IllumDNA': None, u'caspase3': u'Well'}, {u'caspase3prob': u'Site', u'DNA': u'Site', u'DAPIprob': u'Site', u'Brightfieldprob': u'Site', u'EDU': u'Site', u'Brightfield': u'Site', u'IllumDNA': None, u'caspase3': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:8
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI - DAPI") (file doesnot contain "Probabilities") (file doesnot contain "npy")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI - DAPI") (file does contain "Probabilities") (file doesnot contain "npy")
    Name to assign these images:DAPIprob
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC") (file doesnot contain "Probabilities") (file doesnot contain "npy")
    Name to assign these images:caspase3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC") (file does contain "Probabilities") (file doesnot contain "npy")
    Name to assign these images:caspase3prob
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Brightfield") (file doesnot contain "Probabilities") (file doesnot contain "npy")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Brightfield") (file does contain "Probabilities") (file doesnot contain "npy")
    Name to assign these images:Brightfieldprob
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy3") (file doesnot contain "npy")
    Name to assign these images:EDU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumDNA") (file does contain "npy")
    Name to assign these images:IllumDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:3
    Threshold count:1
    Select the images to measure:Brightfield,DNA,EDU,caspase3
    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
FlagImage:[module_num:6|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
    Hidden:3
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QC_Sat
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_DNA
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.02
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    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QC_Blurry1
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Elsewhere...|/mnt/others/bs_data/Pau Carrillo
    Rules file name:qc_rules.txt
    Class number:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QC_Blurry2
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Elsewhere...|/mnt/others/bs_data/Pau Carrillo
    Rules file name:qc_rules.txt
    Class number:3

CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:DNA
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:EDU
    Name the output image:IllumEDU
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:EDU
    Name the output image:CorrEDU
    Select the illumination function:IllumEDU
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:12|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
    Select the input image:caspase3
    Name the output image:Corrcaspase3
    Select the illumination function:Illumcaspase3
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:13|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enabled:False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
    Select the input image:DAPIprob
    Name the primary objects to be identified:DAPI
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:20.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.6
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuc
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:20.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:Nuc
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:caspase3prob
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:2
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    Manual threshold:0.5
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
IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuc
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:Nuc
    Select objects to measure:Cell
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

FilterObjects:[module_num:18|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
    Select the objects to filter:Nuc
    Name the output objects:FilteredNuc
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:2
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1800
    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.9
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.65
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select additional object to relabel:Cell
    Name the relabeled objects:FilteredCell
    Select additional object to relabel:Cytoplasm
    Name the relabeled objects:FilteredCytoplasm

MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:FilteredNuc
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:20|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
    Hidden:3
    Select an image to measure:CorrEDU
    Select an image to measure:Corrcaspase3
    Select an image to measure:CorrDNA
    Select objects to measure:FilteredNuc
    Select objects to measure:FilteredCell
    Select objects to measure:FilteredCytoplasm

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:Yes
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    Name the output image:Outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:FilteredNuc
    Select outline color:red
    Select objects to display:FilteredCell

DisplayDataOnImage:[module_num:22|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
    Display object or image measurements?:Object
    Select the input objects:FilteredNuc
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Outlines
    Text color:yellow
    Name the output image that has the measurements displayed:Outlines_nr
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Outlines_nr
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilteredNuc|Number_Object_Number,FilteredNuc|Intensity_IntegratedIntensity_Corrcaspase3,FilteredNuc|Intensity_IntegratedIntensity_CorrEDU,FilteredNuc|Intensity_MeanIntensity_Corrcaspase3,FilteredNuc|Intensity_MeanIntensity_CorrEDU,FilteredNuc|Intensity_MedianIntensity_Corrcaspase3,FilteredNuc|Intensity_MedianIntensity_CorrEDU,FilteredNuc|AreaShape_Perimeter,FilteredNuc|AreaShape_FormFactor,FilteredNuc|AreaShape_Solidity,FilteredNuc|AreaShape_Area,FilteredNuc|AreaShape_MajorAxisLength,FilteredNuc|AreaShape_MinorAxisLength,Image|Count_Cell,Image|Count_Nuc,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:25|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
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    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:FilteredNuc
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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