CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (and (file doesnot contain "Probabilities"))

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_Apoptosis_(?P<Plate>[0-9]{1})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI - DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Brightfield")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:caspase3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy3")
    Name to assign these images:EDU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:3
    Threshold count:1
    Select the images to measure:DNA
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:2
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:7|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:QC_exp_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:QC_exp.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
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    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:4
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:8
    Experiment name:QC_exp
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:QCClassification
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
    Select an image to include:DNA
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:blue
    Select an image to include:caspase3
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:green
    Select an image to include:EDU
    Use the image name for the display?:Yes
    Image name:Channel3
    Channel color:red
    Select an image to include:Brightfield
    Use the image name for the display?:Yes
    Image name:Channel4
    Channel color:gray
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Frame_[None]
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_DNA
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Metadata_ImageNumber
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_caspase3
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Metadata_ImageNumber
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_EDU
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis measurement:Metadata_ImageNumber
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_Brightfield
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_DNA
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_DNA
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_caspase3
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_caspase3
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_EDU
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_EDU
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_Brightfield
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_Brightfield
    Select the Y-axis index:ImageNumber
