CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:52
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "Probabilities")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_Apoptosis_(?P<Plate>[0-9]{1})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern ‘TIF’.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI - DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:caspase3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy3")
    Name to assign these images:EDU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Brightfield")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using All images, the Regular method and a small median filter.']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
    Select the input image:DNA
    Name the output image:IllumDNAmed250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DNA
    Name the output image:IllumDNAmed275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:DNA
    Name the output image:IllumDNAmed300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:DNA
    Name the output image:IllumDNAgau250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DNA
    Name the output image:IllumDNAgau275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:DNA
    Name the output image:IllumDNAgau300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:EDU
    Name the output image:IllumEDUmed250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:EDU
    Name the output image:IllumEDUmed275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:13|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
    Select the input image:EDU
    Name the output image:IllumEDUmed300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:14|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
    Select the input image:EDU
    Name the output image:IllumEDUgau250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:15|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
    Select the input image:EDU
    Name the output image:IllumEDUgau275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:16|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
    Select the input image:EDU
    Name the output image:IllumEDUgau300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:17|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfieldmed250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:18|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfieldmed275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:19|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfieldmed300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:20|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfieldgau250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:21|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfieldgau275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:22|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
    Select the input image:Brightfield
    Name the output image:IllumBrightfieldgau300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:23|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3med250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:24|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3med275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:25|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3med300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:26|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3gau250
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:250
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:27|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3gau275
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:275
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:28|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
    Select the input image:caspase3
    Name the output image:Illumcaspase3gau300
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:300
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:29|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notes:['You can save the final illumination function to a file for later use in an analysis pipeline.']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
    Select the type of image to save:Image
    Select the image to save:IllumDNAmed250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_median_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:IllumDNAmed275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_median_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:IllumDNAmed300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_median_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:IllumDNAgau250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_gaussian_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:IllumDNAgau275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_gaussian_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:IllumDNAgau300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_DNA_gaussian_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:IllumEDUmed250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_median_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:IllumEDUmed275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_median_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:IllumEDUmed300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_median_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:IllumEDUgau250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_gaussian_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:IllumEDUgau275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_gaussian_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:IllumEDUgau300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_EDU_gaussian_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3med250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_median_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3med275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_median_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3med300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_median_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3gau250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_gaussian_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3gau275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_gaussian_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:Illumcaspase3gau300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_caspase3_gaussian_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfieldmed250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_median_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfieldmed275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_median_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfieldmed300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_median_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfieldgau250
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_gaussian_250
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfieldgau275
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_gaussian_275
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:IllumBrightfieldgau300
    Select method for constructing file names:Single name
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    Enter single file name:Illum_Brightfield_gaussian_300
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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